OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)
Comment
  Overview

  This scenario is used for collecting data from acquisition client
   and saving it to a csv file.

  Keyboard stimulations are also logged (and saved to csv file):
  	a or p mark stimulation time,
  	z finishes this scenario.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> CSV File Writer
  Filename = E:/Tilen/FAX/2. stopnja/UI/projekt-bci/free-will/signals/record-sig-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Keyboard stimulator => #3
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_02
  Action to perform = Stop
#3 -> Stimulation Filter => #5
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_01
  Stimulation range end = OVTK_StimulationId_Label_01
#3 -> Stimulation Filter => #6
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_Label_0A
  Stimulation range end = OVTK_StimulationId_Label_0A
Input stimulations 1=#5, Input stimulations 2=#6 -> Stimulation multiplexer => #7
-> Stimulation listener
  Log level to use = Information
#7 -> CSV File Writer
  Filename = E:/Tilen/FAX/2. stopnja/UI/projekt-bci/free-will/signals/record-stim-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
